PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = psychopy_1
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent target
      fillColor = 0.6471, -0.1765, -0.7647
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        press y when you see square
        press space to start the function
  Routine thank_you
  Routine thankyou
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 1.0
      text = Thank you
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine trial
  LoopTerminator trials
  Routine thankyou
