PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tutorial_2
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = triangle
      size = 10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori = tilt
      saveStartStop = False
      sf = 5
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
